PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1422, 800]
  Full-screen window = False
  expName = Tetris-Workload
  Screen = 1
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Routines
  Routine IntroText3
    TextComponent intro3_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Das Spiel steuern Sie mit den Pfeiltasten sowie der Leertaste.

        Linke & rechte Pfeiltaste = Bewegen des Spielsteins nach links bzw. rechts
        Obere Pfeiltaste = Drehen des Spielsteins
        Untere Pfeiltaste = Schnelleres Fallenlassen des Spielsteins
        Leertaste = Spielstein fällt sofort auf die tiefste Position
    TextComponent intro3_text_2
      color = black
      text = Weiter durch drücken der Leertaste
      pos = (0, -0.5)
      startVal [time (s)] = 3
      letterHeight = 0.08
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine IntroText2
    TextComponent Intro2_text
      color = black
      text = Der Geruch wird Ihnen während des Spielens in Blöcken präsentiert. Atmen Sie ruhig und normal.
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    TextComponent intro2_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rating_intensity
    RatingScaleComponent intensity
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 2.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_ratingintensity
      color = black
      text = Wie intensiv haben Sie diesen Geruch empfunden?
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine IntroText4
    TextComponent Intro4_text
      color = black
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Bei jedem Geruch stoppt das Spiel nach circa einer Minute und die Applikation des Geruchs wird beendet.
        Es erscheint dann eine Bewertungsskala für die Intensität des vorangegangenen Geruchs und anschließend eine für den Schwierigkeitsgrad des Spiels.
        Die 10 steht dabei für einen sehr intensiven Geruch bzw. einen sehr hohen Schwierigkeitsgrad und die 1 für einen sehr schwachen Geruch bzw. einen sehr niedrigen Schwierigkeitsgrad.

        Bitte verschieben Sie den Marker durch die linke und rechte Pfeiltaste an die gewünschte Position und bestätigen Sie Ihre Eingabe mit der Eingabetaste.
    TextComponent Intro4_text2
      color = black
      text = Wenn Sie keine Fragen mehr haben, können Sie das Experiment durch drücken der Leertaste starten.
      pos = (0, -0.8)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    TextComponent stimulus_plus
      text = +
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        import serial
        import time

        port = serial.Serial("COM4", 19200, timeout=0.5)
      Begin Routine:
        channel = number_in_olf


        for i in range(0, 13):
            port.write(b"\nF%d\r" %channel)
            time.sleep(2.0)
            print("OLF Trigger No.  %d" %i)

        port.write(b"\nF%d\r" %channel)
      End Experiment:
        port.close()
  Routine choose_difficulty
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 50
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_2
      text = trial
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine EndText
    TextComponent EndText1
      color = black
      text = Vielen Dank für Ihre Teilnahme.
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0
      letterHeight = 0.08
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  Routine rating_difficulty
    RatingScaleComponent difficulty
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 2.0
      forceEndRoutine = True
      low = 1
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    TextComponent text_ratingdifficulty
      text = Wie schwer fanden Sie diese Runde Tetris?
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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  Routine Spacer
    TextComponent spacer_text
      color = black
      text = Eine neue Runde Tetris startet bald...
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Tetris
    CodeComponent code_2
      Begin Experiment:
        import tetris
        import serial

        try:
            port = serial.Serial('COM4', 19200) # when testing WITH OLF
        except serial.SerialException:
            print("Couldnt find COM port. Using port = 'none'")
            port = 'none' # when testing withOUT OLF
      Begin Routine:
        # to decrease runtime to speed up testing
        runtime = 56 # usualy runtime = 56

        logging.log(level=logging.EXP, msg='Starting Tetris ...')
        returnval = tetris.main(difficulty_level-1, runtime, thisExp, port, channel, logging)
        logging.log(level=logging.EXP, msg= 'Tetris returned: %d' %returnval)

        # to remove
        print('Tetris returned: %d' %returnval)
      End Experiment:
        if port != 'none':
            port.close()
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Tetris finished
        it returned
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_val
      text [set every frame] = $returnval
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine IntroText
    TextComponent Intro1_text1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        In diesem Experiment lassen wir Sie Tetris spielen und werden Ihnen dabei die Gerüche Banane, Orange, Leder, Holz sowie einen Leerduft präsentieren.

        Ihre Aufgabe ist es, nach Ablauf der Spielzeit die Intensität des Geruchs sowie den Schwierigkeitsgrad des Spiels zu bewerten.
        Es ist dabei möglich, dass Sie keinen Geruch riechen.
    TextComponent Intro1_text2
      color = black
      text = Weiter durch drücken der Leertaste.
      pos = (0, -0.5)
      startVal [time (s)] = 3.0
      letterHeight = 0.08
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine IntroText
  Routine IntroText2
  Routine IntroText3
  Routine IntroText4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials-data.xlsx
    isTrials = False
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([(u'odor', u'Leder'), (u'difficulty_level', 10), (u'channel', 1)]),
      OrderedDict([(u'odor', u'Holz'), (u'difficulty_level', 10), (u'channel', 2)]),
      OrderedDict([(u'odor', u'Banane'), (u'difficulty_level', 10), (u'channel', 3)]),
      OrderedDict([(u'odor', u'Orange'), (u'difficulty_level', 10), (u'channel', 4)]),
      OrderedDict([(u'odor', u'Wasser'), (u'difficulty_level', 10), (u'channel', 7)]),
      OrderedDict([(u'odor', u'Leder'), (u'difficulty_level', 40), (u'channel', 1)]),
      OrderedDict([(u'odor', u'Holz'), (u'difficulty_level', 40), (u'channel', 2)]),
      OrderedDict([(u'odor', u'Banane'), (u'difficulty_level', 40), (u'channel', 3)]),
      OrderedDict([(u'odor', u'Orange'), (u'difficulty_level', 40), (u'channel', 4)]),
      OrderedDict([(u'odor', u'Wasser'), (u'difficulty_level', 40), (u'channel', 7)])]
    Routine Spacer
    Routine Tetris
    Routine rating_intensity
    Routine rating_difficulty
  LoopTerminator trials
  Routine EndText
